PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Biosignals2_internalcamera_Psychopy
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine baseline
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    TextComponent fixation_baseline
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $recovery_duration
      text = +
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    CodeComponent baseline_trigger_code
      Code Type = Py
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      Begin Routine:
        #----
        # Log time for camera
        # ---
        thisExp.addData('onset_wall', time.time())
        thisExp.addData('time_since_recording_start', time.time() - experiment_start_wall)

        stimulus_trigger_sent = False
        stimulus_trigger_cleared = False
      Each Frame:
        # --- Stimulus ON trigger ---
        if fixation_baseline.status == STARTED and not stimulus_trigger_sent:
            win.callOnFlip(ser.write, str.encode(baseline_trigger))
            stimulus_trigger_sent = True

        # --- Stimulus OFF trigger ---
        if fixation_baseline.status == FINISHED and not stimulus_trigger_cleared:
            win.callOnFlip(ser.write, str.encode('00'))
            stimulus_trigger_cleared = True
      End Routine:
        ser.write ('RR'.encode('utf-8'))

        # set variable to record valence and arousal ratings
        condition = 'post_baseline'
  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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      text:
        Thank you! You have completed the study.

        Please let the experimenter know you are finished.
  Routine trigger_setup
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import serial
        import time
        import random



        #----
        # CAMERA SETUP
        #----
        import cv2
        import time
        import threading
        import csv

        class WebcamRecorder:
            def __init__(self, output_path):
                self.output_path = output_path
                self.timestamps = []
                self._stop_event = threading.Event()
                self._thread = None
                self._start_wall_time = None
                self._fps = None
                self._cap = None

            def warmup(self):
                self._cap = cv2.VideoCapture(0, cv2.CAP_DSHOW)
                self._cap.set(cv2.CAP_PROP_FRAME_WIDTH, 640)
                self._cap.set(cv2.CAP_PROP_FRAME_HEIGHT, 480)
                for _ in range(5):
                    self._cap.read()
                t0 = time.time()
                for _ in range(60):
                    self._cap.read()
                self._fps = 60 / (time.time() - t0)

            def _record(self):
                cap = self._cap
                width  = int(cap.get(cv2.CAP_PROP_FRAME_WIDTH))
                height = int(cap.get(cv2.CAP_PROP_FRAME_HEIGHT))
                fourcc = cv2.VideoWriter_fourcc(*'MJPG')
                out = cv2.VideoWriter(self.output_path.replace('.mp4', '.avi'), fourcc, self._fps, (width, height))
                self._start_wall_time = time.time()
                frame_idx = 0
                while not self._stop_event.is_set():
                    ret, frame = cap.read()
                    if not ret:
                        break
                    out.write(frame)
                    self.timestamps.append((frame_idx, time.time()))
                    frame_idx += 1
                cap.release()
                out.release()

            def start(self):
                self._thread = threading.Thread(target=self._record, daemon=True)
                self._thread.start()
                while self._start_wall_time is None:
                    time.sleep(0.01)

            def stop(self):
                self._stop_event.set()
                self._thread.join()

            def save_timestamps(self, path):
                with open(path, 'w', newline='') as f:
                    writer = csv.writer(f)
                    writer.writerow(['frame_index', 'wall_time', 'time_since_recording_start'])
                    for idx, t in self.timestamps:
                        writer.writerow([idx, t, round(t - self._start_wall_time, 6)])

        participant_id = expInfo['participant']
        save_dir = f'data/webcam'
        os.makedirs(save_dir, exist_ok=True)

        recorder = WebcamRecorder(f'{save_dir}/{participant_id}_recording.mp4')
        recorder.warmup()
        recorder.start()
        experiment_start_wall = time.time()

        # -------------------------
        # COUNTERBALANCING SETUP
        # -------------------------

        # Determines which stimulus set (positive or negative videos) is presented first.
        # Must be updated manually at the start of the experiment - record in counterbalancing_tracker
        # 'pos_first' = positive block in block 1, negative in block 2.
        # 'neg_first' = negative block in block 1, positive in block 2.
        condition_order = 'neg_first'

        # Tracks how many valence/arousal rating pairs have been presented to this participant.
        # Incremented at the start of each rating pair; used to alternate the rating order.
        rating_pair_count = 0

        # Starting order for momentary rating pairs (pre/post baseline, post-induction, post-recovery).
        # Must be set-up manually and tracked in counterbalancing_tracker
        # rating_start = 'arousal_first'
        rating_start = 'valence_first'

        # Same counter and starting order logic for stimuli ratings (video_rating loop).
        # stim_rating_start is set to the opposite of rating_start so that the two
        # rating contexts do not both begin with the same dimension.
        stim_rating_pair_count = 0
        stim_rating_start = 'arousal_first' if rating_start == 'valence_first' else 'valence_first'

        # -------------------------
        # MISC
        # -------------------------

        # Tracks how many experimental blocks have been completed.
        # Used by block_setup to determine which stimulus file to load.
        block_count = 0

        # Holds the current stimulus condition ('positive' or 'negative').
        # Set during block_setup and used to assign EEG triggers.
        stim_condition = ""

        # Duration of the stim_recovery period in seconds.
        recovery_duration = 180

        # ==============================
        # SERIAL / TRIGGER SETUP
        # ==============================


        USE_REAL_SERIAL = False  # <-- toggle this (True in lab, False when testing)

        # ------------------------------
        # Fake serial class
        # ------------------------------
        class FakeSerial:
            def __init__(self, *args, **kwargs):
                print("[FakeSerial] Using mock serial port")

            def write(self, data):
                try:
                    decoded = data.decode()
                except:
                    decoded = data
                print(f"[FakeSerial write] {decoded}")
                time.sleep(0.005)  # simulate small hardware delay

            def read(self, size=1):
                return b"\x00" * size

            def readline(self):
                return b"0\n"

            def close(self):
                print("[FakeSerial] closed")

            def flush(self):
                pass

            @property
            def in_waiting(self):
                return 0


        # ------------------------------
        # Initialise serial connection
        # ------------------------------
        if USE_REAL_SERIAL:
            try:
                import serial
                ser = serial.Serial(
                    "COM3",
                    115200,
                    timeout=1,
                    bytesize=8,
                    stopbits=1
                )
                print("[Serial] Connected to COM3")

            except Exception as e:
                print(f"[Serial] Failed ({e}) → falling back to FakeSerial")
                ser = FakeSerial()
        else:
            ser = FakeSerial()


        # ------------------------------
        # Reset / initialise device
        # ------------------------------
        try:
            ser.write(b'RR')  # Reset port to prepare for first trigger
            print("[Serial] Reset command sent")
        except Exception as e:
            print(f"[Serial] Reset failed: {e}")

        """
        # Configure serial port (customize COM port as needed)
        ser = serial.Serial("COM3", 115200, timeout=1, bytesize=8, stopbits=1)

        # Open the port and reset
        #ser.open()
        ser.write('RR'.encode())  # Reset port to prepare for first trigger
        """
        # Assign Hex codes to each trigger being sent
        baseline_trigger = '01'
        neg_stim1_trigger = '02'
        neg_stim2_trigger = '04'
        neg_stim_recovery_trigger = '08'
        pos_stim1_trigger = '10'
        pos_stim2_trigger = '20'
        pos_stim_recovery_trigger = '40'
        temp_sync_trigger = '80'
      Begin Routine:
        # set variable to record valence and arousal ratings
        condition = 'pre_baseline'

        #----
        # Log time for camera
        # ---
        thisExp.addData('onset_wall', time.time())
        thisExp.addData('time_since_recording_start', time.time() - experiment_start_wall)
      End Experiment:
        #---
        # CAMERA SAVE
        #---
        recorder.stop()
        recorder.save_timestamps(f'{save_dir}/{participant_id}_frame_timestamps.csv')
      End Routine:
        thisExp.addData("conditionOrder", condition_order)
    CodeComponent webcam_code
      Code Type = Auto->JS
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      Begin Experiment:
        import sys
        sys.path.insert(0, os.getcwd())   # biometrics_server.py sits next to this experiment
        from biometrics_server import BiometricsRecorder

        # clock      → the `time` column (globalClock, same as trial.started — for joining to trials).
        # mono_clock → the `mono_time` column (core.getTime never resets — a safety net).
        # `globalClock`, `core`, `filename` all come from Builder.
        bio = BiometricsRecorder(
            clock=lambda: globalClock.getTime(format='float'),
            mono_clock=core.getTime,
            log=filename + '_biometrics.csv',
        ).start()
      Begin Routine:
        bio.clear()
      End Experiment:
        bio.write_clocksync(filename + '_clocksync.json', extra={
            "mono_reset":   core.monotonicClock.getLastResetTime(),  # raw monotonic base (→ PTB GetSecs)
            "global_reset": globalClock.getLastResetTime(),          # globalClock reset, same base (→ data-file .started)
        })
        bio.stop()
  Routine approach_rating
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    CodeComponent approach_rating_code
      Code Type = Auto->JS
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      Begin Routine:
        stim_approach_mouse.setVisible(True)
        timer = None

        # set the path to the image shown so that it is identical to what was presented on the previous trial
        image_id = screenshot_path
      Each Frame:
        if stim_approach_slider.getRating() is not None:

            if timer is None:
                timer = core.CountdownTimer(2)

            if timer.getTime() < 0:
                continueRoutine = False
      End Routine:
        stim_approach_mouse.setVisible(False)
    MouseComponent stim_approach_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    SliderComponent stim_approach_slider
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent stim_approach_question_txt
      letterHeight = 0.04
      pos = (0, 0.025)
      startVal [time (s)] = 0.0
      text = How much did you want to watch this?
      wrapWidth = 2.2
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    ImageComponent screenshot_image_approach
      image [set every repeat] = $image_id
      pos = (0, 0.3)
      size = (None, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent not_at_all_txt
      letterHeight = 0.03
      pos = (-0.6,-0.25)
      startVal [time (s)] = 0.0
      text = Strongly wanted to avoid it
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    TextComponent approach_txt
      letterHeight = 0.03
      pos = (0.6,-0.25)
      startVal [time (s)] = 0.0
      text = Strongly wanted to watch it
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    TextComponent moust_instruct_6_txt
      letterHeight = 0.03
      pos = (0, -0.04)
      startVal [time (s)] = 0.0
      text = Use your mouse to select the point on the slider.
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  Routine stimuli_affect_rating
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    CodeComponent affect_rating_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # possible slider positions
        top_slider_pos = (0, -0.1)
        bottom_slider_pos = (0, -0.25)

        # possible slider label positions
        top_left_label = (-0.7, -0.15)
        top_right_label = (0.7, -0.15)
        bottom_left_label = (-0.7, -0.3)
        bottom_right_label = (0.7, -0.3)
      Begin Routine:
        stim_affect_mouse.setVisible(True)
        timer = None

        # set the path to the image shown so that it is identical to what was presented on the previous trial
        image_id = screenshot_path

        # Only run this on the FIRST trial of the loop
        if video_rating.thisN == 0:
            stim_slider_orders = ["valence_first"] * 2 + ["arousal_first"] * 2
            random.shuffle(stim_slider_orders)
            order_index = 0

        # Get the order for THIS trial
        questionOrder = stim_slider_orders[order_index]
        order_index += 1

        if questionOrder == "valence_first":
            # Valence on top
            stim_valence_slider_pos = top_slider_pos
            stim_pleasant_txt_pos = top_right_label
            stim_unpleasant_txt_pos = top_left_label

            stim_arousal_slider_pos = bottom_slider_pos
            stim_alert_txt_pos = bottom_right_label
            stim_notalert_txt_pos = bottom_left_label

        else:
            # Arousal on top
            stim_arousal_slider_pos = top_slider_pos
            stim_alert_txt_pos = top_right_label
            stim_notalert_txt_pos = top_left_label

            stim_valence_slider_pos = bottom_slider_pos
            stim_pleasant_txt_pos = bottom_right_label
            stim_unpleasant_txt_pos = bottom_left_label
      Each Frame:
        if (valence_slider.getRating() is not None
            and arousal_slider.getRating() is not None):

            if timer is None:
                timer = core.CountdownTimer(2)

            if timer.getTime() < 0:
                continueRoutine = False
      End Routine:
        stim_affect_mouse.setVisible(False)
    MouseComponent stim_affect_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent affect_question_text
      draggable = True
      letterHeight = 0.04
      pos = (0, 0.025)
      startVal [time (s)] = 0.0
      text = Overall, how did you feel while watching this video?
      wrapWidth = 1.8
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    SliderComponent valence_slider
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos [set every repeat] = $stim_valence_slider_pos
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent pleasant_txt
      letterHeight = 0.03
      pos [set every repeat] = $stim_pleasant_txt_pos
      startVal [time (s)] = 0.0
      text = very pleasant
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    TextComponent unpleasant_txt
      letterHeight = 0.03
      pos [set every repeat] = $stim_unpleasant_txt_pos
      startVal [time (s)] = 0.0
      text = very unpleasant
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    SliderComponent arousal_slider
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos [set every repeat] = $stim_arousal_slider_pos
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ImageComponent screenshot_image
      image [set every repeat] = $screenshot_path
      pos = (0, 0.3)
      size = (None, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent not_alert_txt
      letterHeight = 0.03
      pos [set every repeat] = $stim_notalert_txt_pos
      startVal [time (s)] = 0.0
      text = not alert at all
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    TextComponent alert_txt
      letterHeight = 0.03
      pos [set every repeat] = $stim_alert_txt_pos
      startVal [time (s)] = 0.0
      text = very alert
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  Routine stimuli
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    MovieComponent video
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $stim_path
      size = (1,0.5)
      startVal [time (s)] = 0.0
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    CodeComponent stim_trigger_code
      Code Type = Py
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      Begin Routine:
        #----
        # Log time for camera
        # ---
        thisExp.addData('onset_wall', time.time())
        thisExp.addData('time_since_recording_start', time.time() - experiment_start_wall)

        if trigger_name == 'Nstim1_trig':
            neg_stim_trigger = neg_stim1_trigger
        elif trigger_name == 'Nstim2_trig':
             neg_stim_trigger = neg_stim2_trigger
        if trigger_name == 'Pstim1_trig':
            pos_stim_trigger = pos_stim1_trigger
        elif trigger_name == 'Pstim2_trig':
            pos_stim_trigger = pos_stim2_trigger


        stimulus_trigger_sent = False
        stimulus_trigger_cleared = False
      Each Frame:
        # Set trigger value based on condition
        if stim_condition == 'negative':
            stim_trigger = neg_stim_trigger
        elif stim_condition == 'positive':
            stim_trigger = pos_stim_trigger

        # --- Stimulus ON ---
        if video.status == STARTED and not stimulus_trigger_sent:
            win.callOnFlip(ser.write, str.encode(stim_trigger))
            stimulus_trigger_sent = True

        # --- Stimulus OFF ---
        if video.status == FINISHED and not stimulus_trigger_cleared:
            win.callOnFlip(ser.write, str.encode('00'))
            ser.write('RR'.encode('utf-8'))
            stimulus_trigger_cleared = True
      End Routine:
        ser.write ('RR'.encode('utf-8'))
  Routine stim_recovery
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    TextComponent fixation_stim_recovery
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $recovery_duration
      text = +
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    CodeComponent stim_recovery_trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #----
        # Log time for camera
        # ---
        thisExp.addData('onset_wall', time.time())
        thisExp.addData('time_since_recording_start', time.time() - experiment_start_wall)

        stimulus_trigger_sent = False
        stimulus_trigger_cleared = False
      Each Frame:
        # Send triggers
        if condition == 'negative' or stim_condition == 'negative':
            trigger = neg_stim_recovery_trigger
        elif condition == 'positive' or stim_condition == 'positive':
            trigger = pos_stim_recovery_trigger

        if fixation_stim_recovery.status == STARTED and not stimulus_trigger_sent:
            win.callOnFlip(ser.write, str.encode(trigger))
            stimulus_trigger_sent = True

        if fixation_stim_recovery.status == FINISHED and not stimulus_trigger_cleared:
            win.callOnFlip(ser.write, str.encode('00'))
            ser.write('RR'.encode('utf-8'))
            stimulus_trigger_cleared = True
      End Routine:
        ser.write ('RR'.encode('utf-8'))
  Routine block_setup
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        block_count = block_count +1

        if condition_order == 'pos_first':
            if block_count == 1:
                stim_file = 'positive_stim.csv'
                stim_condition = 'positive'
            elif block_count == 2:
                stim_file = 'negative_stim.csv'
                stim_condition = 'negative'
        elif condition_order == 'neg_first':
            if block_count == 1:
                stim_file = 'negative_stim.csv'
                stim_condition = 'negative'
            elif block_count == 2:
                stim_file = 'positive_stim.csv'
                stim_condition = 'positive'
  Routine momentary_arousal_rating
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    CodeComponent momentary_arousal_rating_code_B
      Code Type = Auto->JS
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      Begin Routine:
        momentary_arousal_mouse.setVisible(True)
        timer = None

        condition = stim_condition
      Each Frame:
        if momentary_arousal_slider.getRating() is not None:

            if timer is None:
                timer = core.CountdownTimer(2)

            if timer.getTime() < 0:
                continueRoutine = False
      End Routine:
        thisExp.addData('condition', condition)
    MouseComponent momentary_arousal_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent momentary_arousal_question_txt
      draggable = True
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = How do you feel right now?
      wrapWidth = 1.8
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    SliderComponent momentary_arousal_slider
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos [set every repeat] = (0,0)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent momentary_alert_txt
      letterHeight = 0.03
      pos [set every repeat] = (0.5, -0.05)
      startVal [time (s)] = 0.0
      text = very alert
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    TextComponent momentary_not_alert_txt
      letterHeight = 0.03
      pos [set every repeat] = (-0.5, -0.05)
      startVal [time (s)] = 0.0
      text = not alert at all
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    TextComponent mouse_instruct_txt_1
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Use your mouse to select the point on the slider.
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  Routine stimuli_arousal_rating
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    CodeComponent stim_arousal_rating_code
      Code Type = Auto->JS
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      Begin Routine:
        stim_arousal_mouse.setVisible(True)
        timer = None

        # set the path to the image shown so that it is identical to what was presented on the previous trial
        image_id = screenshot_path
      Each Frame:
        if stim_arousal_slider.getRating() is not None:
            if timer is None:
                timer = core.CountdownTimer(2)

            if timer.getTime() < 0:
                continueRoutine = False
      End Routine:
        stim_arousal_mouse.setVisible(False)
    MouseComponent stim_arousal_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent stimuli_arousal_question_txt
      draggable = True
      letterHeight = 0.04
      pos = (0, 0.025)
      startVal [time (s)] = 0.0
      text = Overall, how did you feel while watching this video?
      wrapWidth = 1.8
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    SliderComponent stim_arousal_slider
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos [set every repeat] = (0, -0.2)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent stim_alert_txt
      letterHeight = 0.03
      pos = (0.5,-0.25)
      startVal [time (s)] = 0.0
      text = very alert
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    TextComponent stim_not_alert_txt
      letterHeight = 0.03
      pos = (-0.5,-0.25)
      startVal [time (s)] = 0.0
      text = not alert at all
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    ImageComponent screenshot_image_arousal
      image [set every repeat] = $screenshot_path
      pos = (0, 0.3)
      size = (None, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent mouse_instruct_txt_4
      letterHeight = 0.03
      pos = (0, -0.04)
      startVal [time (s)] = 0.0
      text = Use your mouse to select the point on the slider.
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  Routine pre_baseline_setup
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        condition = pre_baseline
  Routine post_baseline
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        condition = post_baseline
  Routine momentary_valence_rating_B
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    CodeComponent momentary_valence_rating_code_B
      Code Type = Auto->JS
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      Begin Routine:
        momentary_valence_mouse_B.setVisible(True)
        timer = None

        condition = stim_condition

        # determine which slider will appear first
        if rating_order == 'valence_first':
            continueRoutine = False
      Each Frame:
        if momentary_valence_slider_B.getRating() is not None:

            if timer is None:
                timer = core.CountdownTimer(2)

            if timer.getTime() < 0:
                continueRoutine = False
      End Routine:
        momentary_valence_mouse_B.setVisible(False)

        thisExp.addData('condition', condition)
    MouseComponent momentary_valence_mouse_B
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent momentary_valence_question_txt_B
      draggable = True
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = How do you feel right now?
      wrapWidth = 1.8
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    SliderComponent momentary_valence_slider_B
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos [set every repeat] = (0,0)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent momentary_pleasant_txt_B
      letterHeight = 0.03
      pos [set every repeat] = (0.5, -0.05)
      startVal [time (s)] = 0.0
      text = very pleasant
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    TextComponent momentary_unpleasant_txt_B
      letterHeight = 0.03
      pos [set every repeat] = (-0.5, -0.05)
      startVal [time (s)] = 0.0
      text = very unpleasant
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    TextComponent mouse_instruct_txt_2
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Use your mouse to select the point on the slider.
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  Routine momentary_valence_rating_A
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    CodeComponent momentary_valence_rating_code_A
      Code Type = Auto->JS
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      Begin Routine:
        momentary_valence_mouse_A.setVisible(True)
        timer = None

        condition = stim_condition

        # determine which slider will appear first
        rating_pair_count += 1
        if rating_pair_count % 2 == 1:
            rating_order = rating_start
        else:
            rating_order = 'arousal_first' if rating_start == 'valence_first' else 'valence_first'

        if rating_order == 'arousal_first':
            continueRoutine = False
      Each Frame:
        if momentary_valence_slider_A.getRating() is not None:

            if timer is None:
                timer = core.CountdownTimer(2)

            if timer.getTime() < 0:
                continueRoutine = False
      End Routine:
        momentary_valence_mouse_A.setVisible(False)

        thisExp.addData('condition', condition)
    MouseComponent momentary_valence_mouse_A
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent momentary_valence_question_txt_A
      draggable = True
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = How do you feel right now?
      wrapWidth = 1.8
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    SliderComponent momentary_valence_slider_A
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos [set every repeat] = (0,0)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent momentary_pleasant_txt_A
      letterHeight = 0.03
      pos [set every repeat] = (0.5, -0.05)
      startVal [time (s)] = 0.0
      text = very pleasant
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    TextComponent momentary_unpleasant_txt_A
      letterHeight = 0.03
      pos [set every repeat] = (-0.5, -0.05)
      startVal [time (s)] = 0.0
      text = very unpleasant
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    TextComponent mouse_instuct_txt
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Use your mouse to select the point on the slider.
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  Routine stimuli_valence_rating_A
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    CodeComponent stim_valence_rating_code_B
      Code Type = Auto->JS
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      Begin Routine:
        stim_valence_mouse_A.setVisible(True)
        timer = None

        # set the path to the image shown so that it is identical to what was presented on the previous trial
        image_id = screenshot_path

        # Setup for counterbalancing
        stim_rating_pair_count += 1
        if stim_rating_pair_count % 2 == 1:
            stim_rating_order = stim_rating_start
        else:
            stim_rating_order = 'arousal_first' if stim_rating_start == 'valence_first' else 'valence_first'

        if stim_rating_order == 'arousal_first':
            continueRoutine = False
      Each Frame:
        if stim_valence_slider_A.getRating() is not None:
            if timer is None:
                timer = core.CountdownTimer(2)

            if timer.getTime() < 0:
                continueRoutine = False
      End Routine:
        stim_valence_mouse_A.setVisible(False)
    MouseComponent stim_valence_mouse_A
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent stimuli_valence_question_txt_A
      draggable = True
      letterHeight = 0.04
      pos = (0, 0.025)
      startVal [time (s)] = 0.0
      text = Overall, how did you feel while watching this video?
      wrapWidth = 1.8
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    SliderComponent stim_valence_slider_A
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos [set every repeat] = (0, -0.2)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent stim_pleasant_txt_A
      letterHeight = 0.03
      pos = (0.5,-0.25)
      startVal [time (s)] = 0.0
      text = very pleasant
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    TextComponent stim_unpleasant_txt_A
      letterHeight = 0.03
      pos = (-0.51,-0.25)
      startVal [time (s)] = 0.0
      text = very unpleasant
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    ImageComponent screenshot_image_valence_A
      image [set every repeat] = $screenshot_path
      pos = (0, 0.3)
      size = (None, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent mouse_instruct_txt_3
      letterHeight = 0.03
      pos = (0, -0.04)
      startVal [time (s)] = 0.0
      text = Use your mouse to select the point on the slider.
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  Routine stimuli_valence_rating_B
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    CodeComponent stim_valence_rating_code_B_2
      Code Type = Auto->JS
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      Begin Routine:
        stim_valence_mouse_B.setVisible(True)
        timer = None

        # Set the path to the image shown so that it is identical to what was presented on the previous trial
        image_id = screenshot_path

        # Skip if valence first
        if stim_rating_order == 'valence_first':
            continueRoutine = False
      Each Frame:
        if stim_valence_slider_B.getRating() is not None:
            if timer is None:
                timer = core.CountdownTimer(2)

            if timer.getTime() < 0:
                continueRoutine = False
      End Routine:
        stim_valence_mouse_B.setVisible(False)
    MouseComponent stim_valence_mouse_B
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent stimuli_valence_question_txt_B
      draggable = True
      letterHeight = 0.04
      pos = (0, 0.025)
      startVal [time (s)] = 0.0
      text = Overall, how did you feel while watching this video?
      wrapWidth = 1.8
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    SliderComponent stim_valence_slider_B
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos [set every repeat] = (0, -0.2)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent stim_pleasant_txt_B
      letterHeight = 0.03
      pos = (0.5,-0.25)
      startVal [time (s)] = 0.0
      text = very pleasant
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    TextComponent stim_unpleasant_txt_B
      letterHeight = 0.03
      pos = (-0.51,-0.25)
      startVal [time (s)] = 0.0
      text = very unpleasant
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    ImageComponent screenshot_image_valence_B
      image [set every repeat] = $screenshot_path
      pos = (0, 0.3)
      size = (None, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent moust_instruct_txt_5
      letterHeight = 0.03
      pos = (0, -0.04)
      startVal [time (s)] = 0.0
      text = Use your mouse to select the point on the slider.
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  Routine overview
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    TextComponent overview_txt
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study!

        In this session, you will alternate between rest and video blocks.

        During rest blocks, a fixation cross will appear in the centre of the screen. Please focus on the cross throughout the block.

        During video blocks, you will watch a series of short video clips. Please watch each clip until it ends.

        At the end of each block, you will be asked a series of questions about how you feel.

        The session follows this sequence:

        Rest → Videos → Rest → Videos → Rest


        When you are ready to begin, press the SPACEBAR.
    KeyboardComponent key_resp_overview
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20
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  Routine baseline_instruct
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    TextComponent baseline_instruct_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = You are about to begin a 3-minute rest period. Please focus on the cross displayed on the screen.
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  Routine video_instruct
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    TextComponent video_instruct_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = You are about to begin a 3-minute video block. During this time, please pay attention to the video clips on the screen.
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  Routine stim_rating_instruct
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    TextComponent stim_rating_instruct_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You’ve now completed all video and rest blocks.

        You will now be asked to answer some final questions about the videos.
  Routine stimuli_emo_rating
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    CodeComponent stim_arousal_rating_code_2
      Code Type = Auto->JS
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      Begin Routine:
        stim_arousal_mouse.setVisible(True)
        timer = None

        # set the path to the image shown so that it is identical to what was presented on the previous trial
        image_id = screenshot_path


        intensityQuestion.setAutoDraw(False)
        intensitySlider.setAutoDraw(False)
        intensitySlider_txt_very_intense.setAutoDraw(False)
        intensitySlider_txt_not_intense.setAutoDraw(False)
      Each Frame:
        if len(emotionText.text.strip()) > 0:
            intensityQuestion.setAutoDraw(True)
            intensitySlider.setAutoDraw(True)
            intensitySlider_txt_very_intense.setAutoDraw(True)
        intensitySlider_txt_not_intense.setAutoDraw(True)

        if intensitySlider.getRating() is not None:
            if timer is None:
                timer = core.CountdownTimer(2)

            if timer.getTime() < 0:
                continueRoutine = False
      End Routine:
        stim_arousal_mouse.setVisible(False)
    MouseComponent stim_arousal_mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent stimuli_emo_question_txt
      draggable = True
      letterHeight = 0.04
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      text = How did you feel while watching this video?
      wrapWidth = 1.8
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    TextComponent stimuli_emo_subquest_txt
      draggable = True
      letterHeight = 0.03
      pos = (0, -0.01)
      startVal [time (s)] = 0.0
      text = (Please type ONE word below)
      wrapWidth = 1.8
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    SliderComponent intensitySlider
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos [set every repeat] = (0, -0.35)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent intensitySlider_txt_very_intense
      letterHeight = 0.03
      pos = (0.6,-0.4)
      startVal [time (s)] = 0.0
      text = very intense
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    TextComponent intensitySlider_txt_not_intense
      letterHeight = 0.03
      pos = (-0.6,-0.4)
      startVal [time (s)] = 0.0
      text = not intense at all
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    ImageComponent screenshot_image_arousal_2
      image [set every repeat] = $screenshot_path
      pos = (0, 0.3)
      size = (None, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent emotionText
      bold = False
      borderColor = 0.6549, 0.6549, 0.6549
      editable = True
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (0.6, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent intensityQuestion
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = How intense was this feeling?
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Flow
  Routine trigger_setup
  Routine overview
  LoopInitiator pre_baseline_ratings loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine momentary_valence_rating_A
    Routine momentary_arousal_rating
    Routine momentary_valence_rating_B
  LoopTerminator pre_baseline_ratings
  Routine baseline_instruct
  Routine baseline
  LoopInitiator post_baseline_ratings loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine momentary_valence_rating_A
    Routine momentary_arousal_rating
    Routine momentary_valence_rating_B
  LoopTerminator post_baseline_ratings
  LoopInitiator experimental_conditions loopType="TrialHandler"
    loopType = random
    nReps = 2
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    conditions:
      [{'condition_order': 'neg_first'},
      {'condition_order': 'pos_first'}]
    LoopInitiator stim_block_and_ratings loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine block_setup
      Routine video_instruct
      LoopInitiator stim_block loopType="TrialHandler"
        Selected rows = 0:4
        conditionsFile = $stim_file
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('neg_stim_path', 'stimuli/N007.mp4'), ('neg_youtube_codes', '2xd-CA48TuY'), ('neg_video_name', 'N007'), ('trigger_name', 'Nstim1_trig'), ('neg_description', 'Stork throws immature baby away'), ('neg_valence', 'Negative'), ('neg_duration', '01:03')]),
          OrderedDict([('neg_stim_path', 'stimuli/N01.mp4'), ('neg_youtube_codes', 'wVa_PukAmFs&list=PLPq7fQ0Sjj3v8UNgx1HvBB47sgNJftorN'), ('neg_video_name', 'N01'), ('trigger_name', 'Nstim2_trig'), ('neg_description', 'Man euthanises dog'), ('neg_valence', 'Negative'), ('neg_duration', '01:48')])]
        Routine stimuli
      LoopTerminator stim_block
      LoopInitiator post_emotion_induction_ratings loopType="TrialHandler"
        loopType = random
        nReps = 1
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        Routine momentary_valence_rating_A
        Routine momentary_arousal_rating
        Routine momentary_valence_rating_B
      LoopTerminator post_emotion_induction_ratings
    LoopTerminator stim_block_and_ratings
    Routine baseline_instruct
    Routine stim_recovery
    LoopInitiator post_emotion_recovery_ratings loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine momentary_valence_rating_A
      Routine momentary_arousal_rating
      Routine momentary_valence_rating_B
    LoopTerminator post_emotion_recovery_ratings
  LoopTerminator experimental_conditions
  Routine stim_rating_instruct
  LoopInitiator video_rating loopType="TrialHandler"
    conditionsFile = rating_images.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('screenshot_path', 'stimuli/N007_screenshot.png'), ('origional_video_id', 'N007')]),
      OrderedDict([('screenshot_path', 'stimuli/N01_screenshot.png'), ('origional_video_id', 'N01')]),
      OrderedDict([('screenshot_path', 'stimuli/P02_screenshot.png'), ('origional_video_id', 'P02')]),
      OrderedDict([('screenshot_path', 'stimuli/P0141_screenshot.png'), ('origional_video_id', 'P0141')])]
    Routine stimuli_emo_rating
    Routine stimuli_valence_rating_A
    Routine stimuli_arousal_rating
    Routine stimuli_valence_rating_B
    Routine approach_rating
  LoopTerminator video_rating
  Routine end
